PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = lanamonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = 2025C_exp1_detect
  keyboardBackend = ioHub
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Routines
  Routine stimulus
    PolygonComponent fix1
      durationEstim = 0.67
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 40
      units = deg
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    PolygonComponent fix2
      durationEstim = 0.67
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 40
      units = deg
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    PolygonComponent precue_2
      durationEstim = 0.067
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (precue * 5, 0) if precue == 0 else (precue * 5, 3.5)
      shape = circle
      size = (0.3, 0.3)
      startEstim = 0.5
      startVal [frame N] = 30
      stopVal [duration (frames)] = 4
      units = deg
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    GratingComponent left_grating
      blendmode = add
      contrast [set every repeat] = contrast/100
      durationEstim = 0.05
      mask = gauss
      opacity [set every repeat] = lefttarget
      ori [set every repeat] = ori
      pos = (-5, 0)
      sf = 2
      size = (2, 2)
      startEstim = 0.617
      startVal [frame N] = 37
      stopVal [frame N] = 40
      tex = sin
      units = deg
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    GratingComponent right_grating
      blendmode = add
      contrast [set every repeat] = contrast/100
      durationEstim = 0.05
      mask = gauss
      opacity [set every repeat] = righttarget
      ori [set every repeat] = ori
      pos = (5, 0)
      sf = 2
      size = (2, 2)
      startEstim = 0.617
      startVal [frame N] = 37
      stopVal [frame N] = 40
      tex = sin
      units = deg
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    NoiseStimComponent noise_left
      blendmode = add
      contrast = 0.39
      durationEstim = 0.05
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = gauss
      noiseBW = 2
      noiseBWO = 30
      noiseBaseSf = 8
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Normal
      pos = (-5, 0)
      sf = None
      size = (2, 2)
      startEstim = 0.617
      startVal [frame N] = 37
      stopVal [frame N] = 40
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    NoiseStimComponent noise_right
      blendmode = add
      contrast = 0.39
      durationEstim = 0.05
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = gauss
      noiseBW = 2
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Normal
      pos = (5, 0)
      sf = None
      size = (2, 2)
      startEstim = 0.617
      startVal [frame N] = 37
      stopVal [frame N] = 40
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  Routine response
    KeyboardComponent key_resp
      allowedKeys = 'num_1','num_3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent postcue_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.6000, 0.6000, 0.6000
      pos [set every repeat] = (postcue * 5, 0)
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    PolygonComponent fix1_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent fix2_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
      units = deg
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  Routine break_2
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        trial_num = trials.thisN + 1

        if (trial_num % 108) == 0 and trial_num > 0:
            showBreak = True
            currentBlock = trial_num // 108
        else:
            showBreak = False
      Each Frame:
        if not showBreak:
            continueRoutine = False
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent break_text_2
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        スペースキーで再開します。
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 2025Cexp - exp1_detection.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('contrast', 12.1), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 15.7), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 19.6), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 22.7), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 25.5), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 29.4), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 35.3), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 39.2), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 42.7), ('ori', 45), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 12.1), ('ori', 315), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 15.7), ('ori', 315), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)]),
      OrderedDict([('contrast', 19.6), ('ori', 315), ('lefttarget', 0), ('righttarget', 0), ('postcue', -1), ('precue', 0)])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
    Routine stimulus
    Routine response
    Routine break_2
  LoopTerminator trials
